PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Maryam_Gholipour_Male
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Fix_Cross
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    PolygonComponent Background
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    PolygonComponent Fix_cross
      fillColor = black
      lineColor = black
      shape = cross
      size = (0.3, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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  Routine Blank_Page
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    PolygonComponent Blank_Background
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Perspective_cue
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    PolygonComponent Cue_Persp_Background
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    ImageComponent Perspective_Cue2
      image [set every repeat] = $P_Cue
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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  Routine Number_Cue
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    PolygonComponent Cue_Num_Background
      fillColor = gray
      lineColor = gray
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    TextComponent Cue_Number
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
      text [set every repeat] = $NUMBER 
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  Routine Room
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    PolygonComponent Room_Background
      fillColor = gray
      lineColor = gray
      shape = triangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent image
      image [set every repeat] = $PICTURE
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp
      allowedKeys = 'c','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine Experiment_section
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    PolygonComponent Exp_Background
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent Press_Space_2
      image = Space.jpg
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent Exp_Resp_Space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
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    PolygonComponent FB_Background
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    TextComponent feedback_text
      color = black
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = $feedback_text
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        # Ensure that key_resp.keys is not None and process correctly
        if key_resp.keys is not None:
            if isinstance(key_resp.keys, list):  # Check if the response is stored as a list
                response = key_resp.keys[0]  # Get the first response
            else:
                response = key_resp.keys  # Use directly if it's a string

            # Convert both response and correct_answer to strings for safe comparison
            if response == str(Correct_Answer):
                feedback_message = "درست"
            else:
                feedback_message = "نادرست"
        else:
            feedback_message = "نادرست"  # Default to incorrect if no response is given

        # Update the text component with the feedback message
        feedback_text.setText(feedback_message)
  Routine trial
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    CodeComponent CodeComponent
      Code Type = Auto->JS
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      End Routine:
        # Assuming 'stimuli' is your TrialHandler object

        # Get the participant's response
        response = event.waitKeys()[0]

        # Get the correct response from the current trial
        correct_response = trial['CORRECT_RESPONSE']

        # Check if the response is correct
        correct = (response == correct_response)

        # Save the data
        thisExp.addData('image', trial['PICTURE'])
        thisExp.addData('response', response)
        thisExp.addData('correct', correct)
        thisExp.nextEntry()
  Routine End
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    PolygonComponent End_Background
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent Thank_You
      image = end.jpg
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Exp_Room
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    PolygonComponent Room_Back
      fillColor = gray
      lineColor = gray
      shape = triangle
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    ImageComponent Image
      image [set every repeat] = $PICTURE
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent Resp
      allowedKeys = 'c','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent CodeComponent_2
      Code Type = Auto->JS
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      End Routine:
        # Get the participant's response
        response = Resp.keys  # Use 'Resp' as the name of your Keyboard component

        # Get the correct response from the current trial
        correct_response = Loop.trialList[Loop.thisTrialN]['Correct_Answer']

        # Check if the response is correct
        correct = (response == correct_response)

        # Save the data
        thisExp.addData('image', Loop.trialList[Loop.thisTrialN]['PICTURE'])
        thisExp.addData('response', response)
        thisExp.addData('correct', correct)
        thisExp.nextEntry()
  Routine instruct_2
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    PolygonComponent Pilot_Background_2
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent Press_Space_3
      image = instruct_2.PNG
      size = (0.92, 0.85)
      startVal [time (s)] = 0.0
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    KeyboardComponent Pilot_Resp_Space_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruct_3
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    PolygonComponent Pilot_Background_3
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent Press_Space_4
      image = instruct_3.PNG
      size = (0.7, 0.7)
      startVal [time (s)] = 0.0
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    KeyboardComponent Pilot_Resp_Space_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruct_1
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    PolygonComponent Pilot_Background
      fillColor = white
      shape = rectangle
      size = (2, 2)
      startVal [time (s)] = 0.0
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    ImageComponent Press_Space
      image = instruct_1.PNG
      size = (1, 0.75)
      startVal [time (s)] = 0.0
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    KeyboardComponent Pilot_Resp_Space
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruct_1
  Routine instruct_2
  Routine instruct_3
  LoopInitiator Practice loopType="TrialHandler"
    conditionsFile = Male_pilot.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'Consistency': 'c', 'PERSPECTIVE': 'other', 'MATCHING': 'match', 'P_Cue': '"HE"', 'NUMBER': '"1"', 'PICTURE': 'S1_O1_MR', 'Correct_Answer': 'c'},
      {'Consistency': 'c', 'PERSPECTIVE': 'other', 'MATCHING': 'match', 'P_Cue': '"HE"', 'NUMBER': '"2"', 'PICTURE': 'S2_O2_ML', 'Correct_Answer': 'c'},
      {'Consistency': 'c', 'PERSPECTIVE': 'other', 'MATCHING': 'match', 'P_Cue': '"HE"', 'NUMBER': '"3"', 'PICTURE': 'S3_O3_ML', 'Correct_Answer': 'c'},
      {'Consistency': 'c', 'PERSPECTIVE': 'self', 'MATCHING': 'match', 'P_Cue': '"YOU"', 'NUMBER': '"1"', 'PICTURE': 'S1_O1_ML', 'Correct_Answer': 'c'},
      {'Consistency': 'c', 'PERSPECTIVE': 'self', 'MATCHING': 'match', 'P_Cue': '"YOU"', 'NUMBER': '"2"', 'PICTURE': 'S2_O2_MR', 'Correct_Answer': 'c'},
      {'Consistency': 'c', 'PERSPECTIVE': 'self', 'MATCHING': 'match', 'P_Cue': '"YOU"', 'NUMBER': '"3"', 'PICTURE': 'S3_O3_MR', 'Correct_Answer': 'c'},
      {'Consistency': 'c', 'PERSPECTIVE': 'other', 'MATCHING': 'mismatch', 'P_Cue': '"HE"', 'NUMBER': '"2"', 'PICTURE': 'S1_O1_ML', 'Correct_Answer': 'n'},
      {'Consistency': 'c', 'PERSPECTIVE': 'other', 'MATCHING': 'mismatch', 'P_Cue': '"HE"', 'NUMBER': '"3"', 'PICTURE': 'S2_O2_MR', 'Correct_Answer': 'n'},
      {'Consistency': 'c', 'PERSPECTIVE': 'other', 'MATCHING': 'mismatch', 'P_Cue': '"HE"', 'NUMBER': '"1"', 'PICTURE': 'S3_O3_MR', 'Correct_Answer': 'n'},
      {'Consistency': 'c', 'PERSPECTIVE': 'self', 'MATCHING': 'mismatch', 'P_Cue': '"YOU"', 'NUMBER': '"3"', 'PICTURE': 'S1_O1_MR', 'Correct_Answer': 'n'}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
    Routine Fix_Cross
    Routine Blank_Page
    Routine Perspective_cue
    Routine Blank_Page
    Routine Room
    Routine feedback
  LoopTerminator Practice
  Routine Experiment_section
  LoopInitiator Loop loopType="TrialHandler"
    conditionsFile = Male_experimental.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'consistency': 'c', 'PERSPECTIVE': 'other', 'MATCHING': 'match', 'P_Cue': '"HE"', 'NUMBER': '"1"', 'PICTURE': 'S1_O1_ML', 'Correct_Answer': 'c'},
      {'consistency': 'c', 'PERSPECTIVE': 'other', 'MATCHING': 'match', 'P_Cue': '"HE"', 'NUMBER': '"1"', 'PICTURE': 'S1_O1_ML', 'Correct_Answer': 'c'},
      {'consistency': 'c', 'PERSPECTIVE': 'other', 'MATCHING': 'match', 'P_Cue': '"HE"', 'NUMBER': '"1"', 'PICTURE': 'S1_O1_ML', 'Correct_Answer': 'c'},
      {'consistency': 'c', 'PERSPECTIVE': 'other', 'MATCHING': 'match', 'P_Cue': '"HE"', 'NUMBER': '"1"', 'PICTURE': 'S1_O1_ML', 'Correct_Answer': 'c'},
      {'consistency': 'c', 'PERSPECTIVE': 'other', 'MATCHING': 'match', 'P_Cue': '"HE"', 'NUMBER': '"1"', 'PICTURE': 'S1_O1_MR', 'Correct_Answer': 'c'},
      {'consistency': 'c', 'PERSPECTIVE': 'other', 'MATCHING': 'match', 'P_Cue': '"HE"', 'NUMBER': '"1"', 'PICTURE': 'S1_O1_MR', 'Correct_Answer': 'c'},
      {'consistency': 'c', 'PERSPECTIVE': 'other', 'MATCHING': 'match', 'P_Cue': '"HE"', 'NUMBER': '"1"', 'PICTURE': 'S1_O1_MR', 'Correct_Answer': 'c'},
      {'consistency': 'c', 'PERSPECTIVE': 'other', 'MATCHING': 'match', 'P_Cue': '"HE"', 'NUMBER': '"1"', 'PICTURE': 'S1_O1_MR', 'Correct_Answer': 'c'},
      {'consistency': 'c', 'PERSPECTIVE': 'other', 'MATCHING': 'match', 'P_Cue': '"HE"', 'NUMBER': '"2"', 'PICTURE': 'S2_O2_ML', 'Correct_Answer': 'c'},
      {'consistency': 'c', 'PERSPECTIVE': 'other', 'MATCHING': 'match', 'P_Cue': '"HE"', 'NUMBER': '"2"', 'PICTURE': 'S2_O2_ML', 'Correct_Answer': 'c'}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
    Routine Fix_Cross
    Routine Blank_Page
    Routine Perspective_cue
    Routine Blank_Page
    Routine Exp_Room
  LoopTerminator Loop
  Routine End
